---
API: 2.1
OpenSesame: 3.2.4
Platform: posix
---
set width 1680
set uniform_coordinates no
set transparent_variables no
set title "mousetracking operator preview effect"
set synth_backend legacy
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 1050
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 24
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/Users/tom/Desktop/opPreviewExperiment/procedure"
set disable_garbage_collection yes
set description "A simple template for the mouse-tracking paradigm"
set custom_cursor no
set coordinates relative
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set bidi no
set background white

define sequence block1_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run keyboard_script always
	run logger always

define sequence block2_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run keyboard_script always
	run logger always

define loop block_1
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block1_sequence
	set description "Repeatedly runs another item"
	set cycles 128
	set continuous no
	set column_order "stimulus;truth;SOAcondition;operation;size"
	set break_if_on_first yes
	set break_if never
	setcycle 0 stimulus "2_7_add_FI.jpg"
	setcycle 0 SOAcondition neutral
	setcycle 0 operation add
	setcycle 0 truth false
	setcycle 0 size small
	setcycle 1 stimulus "2_7_add_FNI.jpg"
	setcycle 1 SOAcondition neutral
	setcycle 1 operation add
	setcycle 1 truth false
	setcycle 1 size small
	setcycle 2 stimulus "2_7_add_true.jpg"
	setcycle 2 SOAcondition neutral
	setcycle 2 operation add
	setcycle 2 truth true
	setcycle 2 size small
	setcycle 3 stimulus "2_7_add_true.jpg"
	setcycle 3 SOAcondition neutral
	setcycle 3 operation add
	setcycle 3 truth true
	setcycle 3 size small
	setcycle 4 stimulus "2_7_mult_FI.jpg"
	setcycle 4 SOAcondition neutral
	setcycle 4 operation mult
	setcycle 4 truth false
	setcycle 4 size small
	setcycle 5 stimulus "2_7_mult_FNI.jpg"
	setcycle 5 SOAcondition neutral
	setcycle 5 operation mult
	setcycle 5 truth false
	setcycle 5 size small
	setcycle 6 stimulus "2_7_mult_true.jpg"
	setcycle 6 SOAcondition neutral
	setcycle 6 operation mult
	setcycle 6 truth true
	setcycle 6 size small
	setcycle 7 stimulus "2_7_mult_true.jpg"
	setcycle 7 SOAcondition neutral
	setcycle 7 operation mult
	setcycle 7 truth true
	setcycle 7 size small
	setcycle 8 stimulus "3_6_add_FI.jpg"
	setcycle 8 SOAcondition neutral
	setcycle 8 operation add
	setcycle 8 truth false
	setcycle 8 size small
	setcycle 9 stimulus "3_6_add_FNI.jpg"
	setcycle 9 SOAcondition neutral
	setcycle 9 operation add
	setcycle 9 truth false
	setcycle 9 size small
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	setcycle 16 stimulus "4_9_add_FI.jpg"
	setcycle 16 SOAcondition neutral
	setcycle 16 operation add
	setcycle 16 truth false
	setcycle 16 size large
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	setcycle 18 stimulus "4_9_add_true.jpg"
	setcycle 18 SOAcondition neutral
	setcycle 18 operation add
	setcycle 18 truth true
	setcycle 18 size large
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	setcycle 20 stimulus "4_9_mult_FI.jpg"
	setcycle 20 SOAcondition neutral
	setcycle 20 operation mult
	setcycle 20 truth false
	setcycle 20 size large
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	setcycle 22 stimulus "4_9_mult_true.jpg"
	setcycle 22 SOAcondition neutral
	setcycle 22 operation mult
	setcycle 22 truth true
	setcycle 22 size large
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	setcycle 64 stimulus "2_7_add_FI.jpg"
	setcycle 64 SOAcondition negative
	setcycle 64 operation add
	setcycle 64 truth false
	setcycle 64 size small
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	setcycle 66 stimulus "2_7_add_true.jpg"
	setcycle 66 SOAcondition negative
	setcycle 66 operation add
	setcycle 66 truth true
	setcycle 66 size small
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	setcycle 68 stimulus "2_7_mult_FI.jpg"
	setcycle 68 SOAcondition negative
	setcycle 68 operation mult
	setcycle 68 truth false
	setcycle 68 size small
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	setcycle 70 stimulus "2_7_mult_true.jpg"
	setcycle 70 SOAcondition negative
	setcycle 70 operation mult
	setcycle 70 truth true
	setcycle 70 size small
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	setcycle 80 stimulus "4_9_add_FI.jpg"
	setcycle 80 SOAcondition negative
	setcycle 80 operation add
	setcycle 80 truth false
	setcycle 80 size large
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	setcycle 82 stimulus "4_9_add_true.jpg"
	setcycle 82 SOAcondition negative
	setcycle 82 operation add
	setcycle 82 truth true
	setcycle 82 size large
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	setcycle 84 stimulus "4_9_mult_FI.jpg"
	setcycle 84 SOAcondition negative
	setcycle 84 operation mult
	setcycle 84 truth false
	setcycle 84 size large
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	setcycle 86 stimulus "4_9_mult_true.jpg"
	setcycle 86 SOAcondition negative
	setcycle 86 operation mult
	setcycle 86 truth true
	setcycle 86 size large
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	run block1_sequence

define loop block_2
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block2_sequence
	set description "Repeatedly runs another item"
	set cycles 128
	set continuous no
	set column_order "stimulus;truth;SOAcondition;operation;size"
	set break_if_on_first yes
	set break_if never
	setcycle 0 stimulus "2_7_add_FI.jpg"
	setcycle 0 SOAcondition neutral
	setcycle 0 operation add
	setcycle 0 truth false
	setcycle 0 size small
	setcycle 1 stimulus "2_7_add_FNI.jpg"
	setcycle 1 SOAcondition neutral
	setcycle 1 operation add
	setcycle 1 truth false
	setcycle 1 size small
	setcycle 2 stimulus "2_7_add_true.jpg"
	setcycle 2 SOAcondition neutral
	setcycle 2 operation add
	setcycle 2 truth true
	setcycle 2 size small
	setcycle 3 stimulus "2_7_add_true.jpg"
	setcycle 3 SOAcondition neutral
	setcycle 3 operation add
	setcycle 3 truth true
	setcycle 3 size small
	setcycle 4 stimulus "2_7_mult_FI.jpg"
	setcycle 4 SOAcondition neutral
	setcycle 4 operation mult
	setcycle 4 truth false
	setcycle 4 size small
	setcycle 5 stimulus "2_7_mult_FNI.jpg"
	setcycle 5 SOAcondition neutral
	setcycle 5 operation mult
	setcycle 5 truth false
	setcycle 5 size small
	setcycle 6 stimulus "2_7_mult_true.jpg"
	setcycle 6 SOAcondition neutral
	setcycle 6 operation mult
	setcycle 6 truth true
	setcycle 6 size small
	setcycle 7 stimulus "2_7_mult_true.jpg"
	setcycle 7 SOAcondition neutral
	setcycle 7 operation mult
	setcycle 7 truth true
	setcycle 7 size small
	setcycle 8 stimulus "3_6_add_FI.jpg"
	setcycle 8 SOAcondition neutral
	setcycle 8 operation add
	setcycle 8 truth false
	setcycle 8 size small
	setcycle 9 stimulus "3_6_add_FNI.jpg"
	setcycle 9 SOAcondition neutral
	setcycle 9 operation add
	setcycle 9 truth false
	setcycle 9 size small
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	setcycle 16 stimulus "4_9_add_FI.jpg"
	setcycle 16 SOAcondition neutral
	setcycle 16 operation add
	setcycle 16 truth false
	setcycle 16 size large
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	setcycle 18 stimulus "4_9_add_true.jpg"
	setcycle 18 SOAcondition neutral
	setcycle 18 operation add
	setcycle 18 truth true
	setcycle 18 size large
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	setcycle 20 stimulus "4_9_mult_FI.jpg"
	setcycle 20 SOAcondition neutral
	setcycle 20 operation mult
	setcycle 20 truth false
	setcycle 20 size large
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	setcycle 22 stimulus "4_9_mult_true.jpg"
	setcycle 22 SOAcondition neutral
	setcycle 22 operation mult
	setcycle 22 truth true
	setcycle 22 size large
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	setcycle 64 stimulus "2_7_add_FI.jpg"
	setcycle 64 SOAcondition negative
	setcycle 64 operation add
	setcycle 64 truth false
	setcycle 64 size small
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	setcycle 66 stimulus "2_7_add_true.jpg"
	setcycle 66 SOAcondition negative
	setcycle 66 operation add
	setcycle 66 truth true
	setcycle 66 size small
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	setcycle 68 stimulus "2_7_mult_FI.jpg"
	setcycle 68 SOAcondition negative
	setcycle 68 operation mult
	setcycle 68 truth false
	setcycle 68 size small
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	setcycle 70 stimulus "2_7_mult_true.jpg"
	setcycle 70 SOAcondition negative
	setcycle 70 operation mult
	setcycle 70 truth true
	setcycle 70 size small
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	setcycle 80 stimulus "4_9_add_FI.jpg"
	setcycle 80 SOAcondition negative
	setcycle 80 operation add
	setcycle 80 truth false
	setcycle 80 size large
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	setcycle 82 stimulus "4_9_add_true.jpg"
	setcycle 82 SOAcondition negative
	setcycle 82 operation add
	setcycle 82 truth true
	setcycle 82 size large
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	setcycle 84 stimulus "4_9_mult_FI.jpg"
	setcycle 84 SOAcondition negative
	setcycle 84 operation mult
	setcycle 84 truth false
	setcycle 84 size large
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	setcycle 86 stimulus "4_9_mult_true.jpg"
	setcycle 86 SOAcondition negative
	setcycle 86 operation mult
	setcycle 86 truth true
	setcycle 86 size large
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	run block2_sequence

define sketchpad breakScreen
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="You may now take a short break.  <br /><br />When you ready to begin the second half,<br />put your fingers on the 'A' and 'L' keys and<br />press one of them to get started." x=32 y=-64 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run setup_script always
	run instruction1 always
	run practiceBlock always
	run instruction2 always
	run block_1 always
	run breakScreen always
	run block_2 always
	run finish always

define sketchpad finish
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="You are now finished with the experiment. <br>  Thank you for your participation!" x=32 y=-64 z_index=0

define sketchpad instruction1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="In this experiment, you will be deciding whether<br />equations involving simple arithmetic are true <br />or false.<br /><br />At the beginning of each trial, an equation <br />will appear in the center of the screen.<br />You will then need to decide if the equation is TRUE or FALSE.<br /><br />If the equation is TRUE, press the 'A' key.<br />If the equation is FALSE, press the 'L' key.<br /><br />To get accustomed to the task, you will do 16 practice trials.<br /><br />When you are ready to begin, put your index fingers<br />on the 'A' and 'L' keys and press one of them to start." x=-352 y=-256 z_index=0

define sketchpad instruction2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="Now we are ready to begin the experiment.<br /><br />You will complete 256 trials, with a short break in the middle.<br /><br />Remember:<br /><br />TRUE = press 'A'<br />FALSE = press 'L'.<br /><br />Try to be as quick and accurate as possible.<br /><br />When you are ready to begin, put your fingers in position <br />on the 'A' and 'L' keys and press one of them to start." x=-352 y=-256 z_index=0

define inline_script keyboard_script
	set description "Executes Python code"
	___run__
	
	# Fixation point
	tick = fixation_length / 3
	my_canvas.clear()
	my_canvas.show()
	exp.sleep(tick)
	my_canvas.text('*')
	my_canvas.show()
	exp.sleep(tick)
	my_canvas.clear()
	my_canvas.show()
	exp.sleep(tick)
	
	
	
	# Show the stimuli
	
	if SOAcondition=='neutral':
		my_canvas.clear()
		my_canvas.image(exp.get_file('stimuli/{0}'.format(stimulus)),True)
		my_canvas.show()
		
	elif SOAcondition=='negative' and operation=='add':
		my_canvas.clear()
		my_canvas.image(exp.get_file('stimuli/addPreview.jpg'),True)
		my_canvas.show()
		exp.sleep(150)
		my_canvas.clear()
		my_canvas.image(exp.get_file('stimuli/{0}'.format(stimulus)),True)
		my_canvas.show()
	
	elif SOAcondition=='negative' and operation=='mult':
		my_canvas.clear()
		my_canvas.image(exp.get_file('stimuli/multPreview.jpg'),True)
		my_canvas.show()
		exp.sleep(150)
		my_canvas.clear()
		my_canvas.image(exp.get_file('stimuli/{0}'.format(stimulus)),True)
		my_canvas.show()
		
	# get keyboard response
	start_time = clock.time()
	key, time = my_keyboard.get_key(keylist=['a', 'l'])
	rt = time - start_time
	
	# calculate accuracy
	if truth == 'true':
		correct_response = 'a'
	else:
		correct_response = 'l'
	accuracy = int(key == correct_response)
	
	# Show a message if wrong answer
	if (accuracy == 0):
		my_canvas.clear()
		my_canvas.text('X',color="red")
		my_canvas.show()
		exp.sleep(1000)
	
	# Standard Logging (the probe and code variables are taken care of automatically)
	self.experiment.set("response", key)
	self.experiment.set("accuracy", accuracy)
	self.experiment.set("rt", rt)
	__end__
	___prepare__
	# Constants
	fixation_length = 900
	
	# Turn our OpenSesame variables into plain Python ones
	stimulus = exp.get('stimulus')
	truth = exp.get('truth')
	SOAcondition = exp.get('SOAcondition')
	operation = exp.get('operation')
	__end__

define logger logger
	set use_quotes yes
	set ignore_missing yes
	set description "Logs experimental data"
	set auto_log yes

define loop practiceBlock
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item practice_sequence
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set column_order "stimulus;truth;SOAcondition;operation"
	set break_if_on_first yes
	set break_if never
	setcycle 0 stimulus "0_3_add_F.jpg"
	setcycle 0 SOAcondition neutral
	setcycle 0 operation add
	setcycle 0 truth false
	setcycle 1 stimulus "0_3_add_T.jpg"
	setcycle 1 SOAcondition neutral
	setcycle 1 operation add
	setcycle 1 truth true
	setcycle 2 stimulus "0_3_mult_F.jpg"
	setcycle 2 SOAcondition neutral
	setcycle 2 operation mult
	setcycle 2 truth false
	setcycle 3 stimulus "0_3_mult_T.jpg"
	setcycle 3 SOAcondition neutral
	setcycle 3 operation mult
	setcycle 3 truth true
	setcycle 4 stimulus "1_4_add_F.jpg"
	setcycle 4 SOAcondition neutral
	setcycle 4 operation add
	setcycle 4 truth false
	setcycle 5 stimulus "1_4_add_T.jpg"
	setcycle 5 SOAcondition neutral
	setcycle 5 operation add
	setcycle 5 truth true
	setcycle 6 stimulus "1_4_mult_F.jpg"
	setcycle 6 SOAcondition neutral
	setcycle 6 operation mult
	setcycle 6 truth false
	setcycle 7 stimulus "1_4_mult_T.jpg"
	setcycle 7 SOAcondition neutral
	setcycle 7 operation mult
	setcycle 7 truth true
	setcycle 8 stimulus "0_3_add_F.jpg"
	setcycle 8 SOAcondition negative
	setcycle 8 operation add
	setcycle 8 truth false
	setcycle 9 stimulus "0_3_add_T.jpg"
	setcycle 9 SOAcondition negative
	setcycle 9 operation add
	setcycle 9 truth true
	setcycle 10 stimulus "0_3_mult_F.jpg"
	setcycle 10 SOAcondition negative
	setcycle 10 operation mult
	setcycle 10 truth false
	setcycle 11 stimulus "0_3_mult_T.jpg"
	setcycle 11 SOAcondition negative
	setcycle 11 operation mult
	setcycle 11 truth true
	setcycle 12 stimulus "1_4_add_F.jpg"
	setcycle 12 SOAcondition negative
	setcycle 12 operation add
	setcycle 12 truth false
	setcycle 13 stimulus "1_4_add_T.jpg"
	setcycle 13 SOAcondition negative
	setcycle 13 operation add
	setcycle 13 truth true
	setcycle 14 stimulus "1_4_mult_F.jpg"
	setcycle 14 SOAcondition negative
	setcycle 14 operation mult
	setcycle 14 truth false
	setcycle 15 stimulus "1_4_mult_T.jpg"
	setcycle 15 SOAcondition negative
	setcycle 15 operation mult
	setcycle 15 truth true
	run practice_sequence

define sequence practice_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run keyboard_script always
	run logger always

define inline_script setup_script
	set description "Executes Python code"
	___run__
	# Create our input and output routines
	from openexp.keyboard import keyboard
	from openexp.canvas import canvas
	my_keyboard = keyboard(exp)
	my_canvas = canvas(exp)
	# Declare them as global, so we can use them later on.
	global my_keyboard, my_canvas
	__end__
	set _prepare ""

